CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|INPUT_PATH_CSV
    Name of the file:FILE_CSV
    Load images based on this data?:Yes
    Base image location:Elsewhere...|INPUT_PATH_IMAGES
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:Hoechst
    Name the output image:Hoechst
    Select the illumination function:Illum_Hoechst
    Select how the illumination function is applied:Divide
    Select the input image:ER
    Name the output image:ER
    Select the illumination function:Illum_ER
    Select how the illumination function is applied:Divide
    Select the input image:Syto
    Name the output image:Syto
    Select the illumination function:Illum_Syto
    Select how the illumination function is applied:Divide
    Select the input image:Golgi
    Name the output image:Golgi
    Select the illumination function:Illum_Golgi
    Select how the illumination function is applied:Divide
    Select the input image:Mito
    Name the output image:Mito
    Select the illumination function:Illum_Mito
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:Hoechst
    Name the primary objects to be identified:NucleiRaw
    Typical diameter of objects, in pixel units (Min,Max):15,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:4|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
    Select the input objects:NucleiRaw
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Golgi
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.005,0.6
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:5|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:6|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
    Select images to measure:ER, Golgi, Hoechst, Mito, Syto
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:7|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
    Select images to measure:ER, Golgi, Hoechst, Mito, Syto
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:ER, Golgi, Hoechst, Mito, Syto
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectIntensityDistribution:[module_num:9|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
    Select images to measure:ER, Golgi, Mito, Syto
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:11|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
    Select images to measure:ER, Golgi, Hoechst, Mito, Syto
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cells
    Select outline color:Green
    Select objects to display:Nuclei

SaveImages:[module_num:13|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>-s\g<Field>-cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|MPI_output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|SAVING_OUTPUT_PATH/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cells|Granularity_1_Golgi,Cells|Granularity_1_ER,Cells|Granularity_1_Hoechst,Cells|Granularity_1_Syto,Cells|Granularity_1_Mito,Cells|Granularity_5_ER,Cells|Granularity_5_Mito,Cells|Granularity_5_Golgi,Cells|Granularity_5_Hoechst,Cells|Granularity_5_Syto,Cells|Granularity_2_Golgi,Cells|Granularity_2_ER,Cells|Granularity_2_Hoechst,Cells|Granularity_2_Mito,Cells|Granularity_2_Syto,Cells|Granularity_4_ER,Cells|Granularity_4_Hoechst,Cells|Granularity_4_Syto,Cells|Granularity_4_Golgi,Cells|Granularity_4_Mito,Cells|Granularity_3_Syto,Cells|Granularity_3_ER,Cells|Granularity_3_Golgi,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:15|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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