CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|INPUT_PATH_CSV
    Name of the file:FILE_CSV
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Illum_artifacts_raw
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.35,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
MeasureObjectIntensity:[module_num:3|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
    Select images to measure:Hoechst
    Select objects to measure:Illum_artifacts_raw

FilterObjects:[module_num:4|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
    Select the objects to filter:Illum_artifacts_raw
    Name the output objects:Illum_artifacts
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MinIntensity_Hoechst
    Filter using a minimum measurement value?:Yes
    Minimum value:0.25
    Filter using a maximum measurement value?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:Mito
    Name the output image:Mito_c
    Select the illumination function:Illum_Mito
    Select how the illumination function is applied:Divide
    Select the input image:Golgi
    Name the output image:Golgi_c
    Select the illumination function:Illum_Golgi
    Select how the illumination function is applied:Divide
    Select the input image:Brightfield
    Name the output image:Brightfield_c
    Select the illumination function:Illum_Brightfield
    Select how the illumination function is applied:Divide
    Select the input image:Syto
    Name the output image:RNA
    Select the illumination function:Illum_Syto
    Select how the illumination function is applied:Divide
    Select the input image:ER
    Name the output image:ER_c
    Select the illumination function:Illum_ER
    Select how the illumination function is applied:Divide
    Select the input image:Hoechst
    Name the output image:DNA
    Select the illumination function:Illum_Hoechst
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:6|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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:ER_c, Golgi_c, Mito_c, Syto
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:10
    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Select the images to measure:Brightfield_c, DNA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:10
    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identifies ALL nuclei in image though we will only take measurements on those NOT touching the border of the image (filtered at a later step)']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
    Select the input image:DNA
    Name the primary objects to be identified:Raw_nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.95
    Lower and upper bounds on threshold:0.0005,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:8|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
    Select images to measure:DNA
    Select objects to measure:Raw_nuclei

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Raw_nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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notes:['Filtramos nucleos muy intensos (probablemente artefactos.', 'TODO: Establecer un threshold basados en q95 de los hitogramas de intensidad.']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
    Select the objects to filter:Raw_nuclei
    Name the output objects:Filtered_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_DNA
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.65
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1400
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
ConvertImageToObjects:[module_num:11|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notes:['We load Cellpose masks as objects (Cells_cellpose)']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
    Select the input image:RNA_mask
    Name the output object:Cellls_cellpose
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

FilterObjects:[module_num:12|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notes:['The objects that are touching the borders are filtered.']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
    Select the objects to filter:Cellls_cellpose
    Name the output objects:Complete_cells
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
MeasureObjectSizeShape:[module_num:13|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notes:['We measure the size of the cells']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
    Select object sets to measure:Complete_cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:14|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notes:['We filter the cells that are to smal']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
    Select the objects to filter:Complete_cells
    Name the output objects:Filtered_cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:2000
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:15|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
    Select objects to be masked:Filtered_nuclei
    Name the masked objects:masked_nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Filtered_cells
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:1.0
    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:16|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notes:['A visualization overlay to see wich cells passed the filters']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Syto
    Name the output image:CellPose_seg
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Filtered_cells
    Select outline color:Green
    Select objects to display:masked_nuclei

RelateObjects:[module_num:17|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
    Parent objects:Filtered_cells
    Child objects:masked_nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Prefinal_nuclei
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
FilterObjects:[module_num:18|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
    Select the objects to filter:Filtered_cells
    Name the output objects:Final_cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_masked_nuclei_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:Children_masked_nuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:19|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
    Parent objects:Final_cells
    Child objects:masked_nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuclei
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
RelateObjects:[module_num:20|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
    Parent objects:Nuclei
    Child objects:Final_cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Cells
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
RescaleIntensity:[module_num:21|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
    Select the input image:Syto
    Name the output image:RNA_escaled
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RNA_escaled
    Name the output image:Cell_segmentation
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:green
    Select objects to display:Nuclei
    Select outline color:red
    Select objects to display:Cells

MeasureImageIntensity:[module_num:23|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
    Select images to measure:Hoechst, Syto
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:10,90

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:Cell_segmentation
    Select method for constructing file names:From image filename
    Select image name for file prefix:Syto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name: _P\g<Plate>
    Saved file format:tiff
    Output file location:Elsewhere...|SAVING_OUTPUT_PATH/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Output file location: None|
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:25|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
    Select the input objects:Cells
    Name the output image:cell_final_maks
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:26|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
    Select the input objects:Nuclei
    Name the output image:nuclei_final_masks
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:27|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
    Select the type of image to save:Mask
    Select the image to save:cell_final_maks
    Select method for constructing file names:From image filename
    Select image name for file prefix:Syto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells_masks
    Saved file format:tiff
    Output file location:Elsewhere...|SAVING_OUTPUT_PATH_OBJECTS/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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
    Select the type of image to save:Mask
    Select the image to save:nuclei_final_masks
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei_masks
    Saved file format:tiff
    Output file location:Elsewhere...|SAVING_OUTPUT_PATH_OBJECTS/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:29|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notes:['We explicitly set which measurement types to export so that we do NOT export measurements of the objects touching the well edges as we ONLY want them for masking and not to use for measurements.', '', 'We have turned off the exporting of measurements starting with the word Location for Cells and Cytoplasm and the duplicate Number_Object_Number from Cells, because a) those measurements are not useful on their own (only relative to one another, which is not an analysis we currently ever perform) and b) we were previously exporting >2000 measurements for those compartments, which would complicate using SQLite if not manually compiled to allow >2000 columns.']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|SAVING_OUTPUT_PATH/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|ImageQuality_ThresholdOtsu_DNA_2W,Image|ImageQuality_ThresholdOtsu_ER_c_3BW,Image|ImageQuality_ThresholdOtsu_Syto_3BW,Image|ImageQuality_ThresholdOtsu_Mito_c_3BW,Image|ImageQuality_ThresholdOtsu_Golgi_c_3BW,Image|ImageQuality_MeanIntensity_DNA,Image|ImageQuality_MeanIntensity_Mito_c,Image|ImageQuality_MeanIntensity_Syto,Image|ImageQuality_MeanIntensity_Golgi_c,Image|ImageQuality_MeanIntensity_ER_c,Image|ImageQuality_MeanIntensity_Brightfield_c,Image|ImageQuality_MADIntensity_ER_c,Image|ImageQuality_MADIntensity_Syto,Image|ImageQuality_MADIntensity_Golgi_c,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:30|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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