CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|INPUT_PATH_CSV
    Name of the file:FILE_CSV
    Load images based on this data?:Yes
    Base image location:Elsewhere...|INPUT_PATH_IMAGES
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Site,Well
    Rescale intensities?:Yes

ConvertImageToObjects:[module_num:2|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
    Select the input image:cells_mask
    Name the output object:cells
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:3|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
    Select the input image:nuclei_mask
    Name the output object:nuclei
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

CorrectIlluminationApply:[module_num:4|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
    Select the input image:Golgi
    Name the output image:Golgi_corr
    Select the illumination function:Illum_Golgi
    Select how the illumination function is applied:Divide
    Select the input image:ER
    Name the output image:ER_corr
    Select the illumination function:Illum_ER
    Select how the illumination function is applied:Divide
    Select the input image:Syto
    Name the output image:Syto_corr
    Select the illumination function:Illum_Syto
    Select how the illumination function is applied:Divide
    Select the input image:Mito
    Name the output image:Mito_corr
    Select the illumination function:Illum_Mito
    Select how the illumination function is applied:Divide
    Select the input image:Hoechst
    Name the output image:Hoechst_corr
    Select the illumination function:Illum_Hoechst
    Select how the illumination function is applied:Divide
    Select the input image:Brightfield
    Name the output image:Brightfield_corr
    Select the illumination function:Illum_Brightfield
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyTertiaryObjects:[module_num:5|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
    Select the larger identified objects:cells
    Select the smaller identified objects:nuclei
    Name the tertiary objects to be identified:cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:6|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
    Select images to measure:Brightfield_corr, ER_corr, Golgi_corr, Hoechst_corr, Mito_corr, Syto_corr
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:cells, cytoplasm, nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:7|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
    Select images to measure:Brightfield_corr, ER_corr, Golgi_corr, Hoechst_corr, Mito_corr, Syto_corr
    Measure within objects?:Yes
    Select objects to measure:cells, cytoplasm, nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Brightfield_corr, ER_corr, Golgi_corr, Hoechst_corr, Mito_corr, Syto_corr
    Select objects to measure:cells, cytoplasm, nuclei

MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:cells
    Select neighboring objects to measure:cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:nuclei
    Select neighboring objects to measure:nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:cells
    Select neighboring objects to measure:cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:Brightfield_corr, ER_corr, Golgi_corr, Hoechst_corr, Mito_corr, Syto_corr
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:nuclei
    Object to use as center?:These objects
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    Select objects to measure:cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:cells, cytoplasm, nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:14|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
    Select images to measure:Brightfield_corr, ER_corr, Golgi_corr, Hoechst_corr, Mito_corr, Syto_corr
    Select objects to measure:cells, cytoplasm, nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:Mito_corr
    Name the output image:mito_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:16|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
    Select the input image:mito_tubeness
    Name the output image:mito_bw
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MorphologicalSkeleton:[module_num:17|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
    Select the input image:mito_bw
    Name the output image:mito_skel

MeasureObjectSkeleton:[module_num:18|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
    Select the seed objects:nuclei
    Select the skeletonized image:mito_skel
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectIntensityDistribution:[module_num:19|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
    Select images to measure:mito_tubeness
    Hidden:2
    Hidden:2
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:nuclei
    Select objects to measure:cytoplasm
    Object to use as center?:Centers of other objects
    Select objects to use as centers:nuclei
    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:No
    Number of bins:20
    Maximum radius:200

MaskImage:[module_num:20|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
    Select the input image:Hoechst
    Name the output image:Hoechst_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:cells
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    Invert the mask?:Yes

MaskImage:[module_num:21|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
    Select the input image:Golgi
    Name the output image:Golgi_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:cells
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    Invert the mask?:Yes

MaskImage:[module_num:22|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
    Select the input image:Brightfield
    Name the output image:Brightfield_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:cells
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    Invert the mask?:Yes

MaskImage:[module_num:23|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
    Select the input image:Syto
    Name the output image:Syto_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:cells
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    Invert the mask?:Yes

MaskImage:[module_num:24|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
    Select the input image:ER
    Name the output image:ER_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:cells
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    Invert the mask?:Yes

MaskImage:[module_num:25|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
    Select the input image:Mito
    Name the output image:Mito_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:cells
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:26|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
    Select images to measure:Brightfield, Brightfield_BackgroundOnly, ER, ER_BackgroundOnly, Golgi, Golgi_BackgroundOnly, Hoechst, Hoechst_BackgroundOnly, Mito, Mito_BackgroundOnly, Syto, Syto_BackgroundOnly
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|SAVING_OUTPUT_PATH/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:cytoplasm|AreaShape_MinFeretDiameter,cytoplasm|AreaShape_Zernike_7_1,cytoplasm|AreaShape_Zernike_7_3,cytoplasm|AreaShape_Zernike_7_5,cytoplasm|AreaShape_Zernike_7_7,cytoplasm|AreaShape_Zernike_4_0,cytoplasm|AreaShape_Zernike_4_2,cytoplasm|AreaShape_Zernike_4_4,cytoplasm|AreaShape_Zernike_2_2,cytoplasm|AreaShape_Zernike_2_0,cytoplasm|AreaShape_Zernike_6_0,cytoplasm|AreaShape_Zernike_6_6,cytoplasm|AreaShape_Zernike_6_4,cytoplasm|AreaShape_Zernike_6_2,cytoplasm|AreaShape_Zernike_8_2,cytoplasm|AreaShape_Zernike_8_0,cytoplasm|AreaShape_Zernike_8_8,cytoplasm|AreaShape_Zernike_8_4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:28|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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